{
	"actions": {
		"acqdatetime": {
			"filters": {},
			"params": {}
		},
		"buckymain": {
			"filters": {},
		   	"params": {
				"protocoltag": "0x0008,0x103E",
				"ROIsize [%]": 18
			}
		}
	},
	"cfgformat": "20181030",
	"comments": {
		"author": "Dennis Dickerscheid, ASZ",
		"creator": " ",
		"description": "Simple CR Flatfield IQ analysis",
		"usage": [""],
		"version": "20181110"
	},
	"info": {
		"acqdatetime": {
			"params": {}
		},
		"qc_series": {
			"params": {
				"protocoltag": "Dicom tag containing the protocol name (default: 0x0008,0x1030 = ProtocolName)",
				"ROIsize [%]": "ROIsize as percentage of width/height (default: 18)"
			}
		}
	}

}
